#task 2 file for topas 

#DEFAULTS
#b:Gr/Enable = "False"
Ts/UseQT = "True"
b:Ts/PauseBeforeSequence = "True"
#b:Ts/PauseBeforeQuit = "True"
i:Ts/Seed = 1
i:Ts/MaxInterruptedHistories = 1000000
i:Ts/ShowHistoryCountAtInterval = 20000 
i:Ts/NumberOfThreads = 0
b:Ge/World/Invisible = "True"

#PHYSIC MODULS
#sv:Ph/Default/Modules = 1 "Transportation_Only"
sv:Ph/Default/Modules = 1 "g4em-standard_opt0"
d:Ph/Default/CutForAllParticles = 0.1 mm 
d:Ph/Default/EMRangeMin = 100. eV 
i:Ph/Default/EMBins = 77

#World 
s:Ge/World/Material    = "Vacuum"
d:Ge/World/HLX         = 1 m
d:Ge/World/HLY         = 1 m
d:Ge/World/HLZ         = 1 m

#scatter foil 1
s:Ge/scatter/parent = "World"
s:Ge/scatter/Material = "Lead"
s:Ge/scatter/Type = "TsBox"
d:Ge/scatter/TransZ = 70 cm
d:Ge/scatter/HLX = 50 cm
d:Ge/scatter/HLY = 50 cm
d:Ge/scatter/HLZ = 0.08 cm


#scatter foil 2
s:Ge/scatter2/parent = "World"
s:Ge/scatter2/Material = "Lead"
s:Ge/scatter2/Type = "TsBox"
d:Ge/scatter2/TransZ = 40 cm
d:Ge/scatter2/HLX = 50 cm 
d:Ge/scatter2/HLY = 50 cm
d:Ge/scatter2/HLZ = 0.08 cm

#scatter foil 2
s:Ge/scatter3/parent = "World"
s:Ge/scatter3/Material = "Lead"
s:Ge/scatter3/Type = "TsBox"
d:Ge/scatter3/TransZ = 90 cm
d:Ge/scatter3/HLX = 50 cm
d:Ge/scatter3/HLY = 50 cm
d:Ge/scatter3/HLZ = 0.08 cm



#kolli
s:Ge/col/parent = "World"
s:Ge/col/Material = "Copper"
s:Ge/col/Type = "TsCylinder"
d:Ge/col/TransY = Ge/BeamPosition/TransY m 
d:Ge/col/TransZ = 20 cm
d:Ge/col/HL = 10 cm
d:Ge/col/RMin = 3.2 cm
d:Ge/col/RMax = 40 cm

#kolli
#s:Ge/col2/parent = "World"
#s:Ge/col2/Material = "Copper"
#s:Ge/col2/Type = "TsCylinder"
#d:Ge/col2/TransY = Ge/BeamPosition/TransY m
#d:Ge/col2/TransZ = 10 cm
#d:Ge/col2/HL = 2 cm
#d:Ge/col2/RMin = 3 cm
#d:Ge/col2/RMax = 20 cm

#Cone
s:Ge/DemoHPolycone/Type              = "G4HPolycone"
s:Ge/DemoHPolycone/Parent            = "World"
s:Ge/DemoHPolycone/Material          = "Copper"
d:Ge/DemoHPolycone/TransX            = 0 cm
d:Ge/DemoHPolycone/TransY            = Ge/BeamPosition/TransY m
d:Ge/DemoHPolycone/TransZ            = 80  cm
d:Ge/DemoHPolycone/RotX              = 0 deg
d:Ge/DemoHPolycone/RotY              = 0 deg
d:Ge/DemoHPolycone/RotZ              = 180 deg
#d:Ge/DemoHPolycone/PhiStart          = 0.25 rad
#d:Ge/DemoHPolycone/PhiTotal          = 1.5 rad
dv:Ge/DemoHPolycone/RInner           = 4 0  0 0 0 cm
dv:Ge/DemoHPolycone/ROuter           = 4 0.5 2.4 2.4 0 cm
dv:Ge/DemoHPolycone/Z                = 4 0   1.8 2   3 cm




#loading DICOM patient 

includeFile = HUtoMaterialSchneider.txt
s:Ge/Patient/Parent   = "World"
#s:Ge/Patient/Material = "G4_WATER"
s:Ge/Patient/Type           = "TsDicomPatient"
s:Ge/Patient/DicomDirectory = "data/CT/DicomDaten"
#sv:Ge/Patient/DicomModalityTags = 1 "CT"



sv:Ge/Patient/ColorByRTStructNames = 4 "CTV_Zylinder" "OAR1" "OAR2" "External"
sv:Ge/Patient/ColorByRTStructColors = 4 "blue" "red" "red" "green"

#i:Ge/Patient/RestrictVoxelsXMin = 300
#i:Ge/Patient/RestrictVoxelsYMin = 300
#i:Ge/Patient/RestrictVoxelsXMax = 400
#i:Ge/Patient/RestrictVoxelsYMax = 400
#i:Ge/Patient/RestrictVoxelsZMin = 300
#i:Ge/Patient/RestrictVoxelsZMax = 400


#iv:Ge/Patient/ShowSpecificSlicesX = 1 -1
#iv:Ge/Patient/ShowSpecificSlicesY = 1 -1
iv:Ge/Patient/ShowSpecificSlicesZ = 1 30



#Basic graphics for future projects
s:Gr/BasicViewA/Type             = "OpenGL"
i:Gr/BasicViewA/WindowSizeX      = 1024
i:Gr/BasicViewA/WindowSizeY      = 768
b:Gr/BasicViewA/IncludeAxes      = "True"
d:Gr/BasicViewA/Theta            = 55 deg
d:Gr/BasicViewA/Phi              = 20 deg
s:Gr/BasicViewA/Projection       = "Perspective"
d:Gr/BasicViewA/PerspectiveAngle = 30 deg
u:Gr/BasicViewA/Zoom             = 3

i:Gr/ShowOnlyOutlineIfVoxelCountExceeds = 5000

s:Tf/Energy/Function = "Linear MeV"
d:Tf/Energy/Rate = 5 MeV/ms
d:Tf/Energy/StartValue = 0.0 MeV

s:Tf/mult/Function = "Linear"
d:Tf/mult/Rate = 1.2 1/ms
u:Tf/mult/StartValue = 1

#10 0 1 2 3 4 5 6 7 8 9 ms
#dv:Tf/Energy/Values = 10 10 20 30 40 50 60 70 80 90 100 MeV

d:Tf/TimelineStart = 0. ms
d:Tf/TimelineEnd = 11. ms
i:Tf/NumberOfSequentialTimes = 11
i:Tf/Vebosity = 2

s:Tf/sin/Function = "Cosine"
d:Tf/sin/RepitionInterval = Tf/TimelineEnd ms 
d:Tf/sin/Rate = 16.3636  deg/ms
d:Tf/sin/StartValue = 20 deg

u:Tf/sq/Value = Tf/sin/value * Tf/sin/value
u:Tf/fuck/Value =  Tf/mult/value * Tf/sq/Value
u:Tf/histories/Value = Tf/fuck/Value * 4	


#Source
s:So/Example/Type                     = "Beam"
s:So/Example/Component                = "BeamPosition"
s:So/Example/BeamParticle             = "proton"
d:So/Example/BeamEnergy               =  140 MeV + Tf/Energy/value
u:So/Example/BeamEnergySpread         = 0.757504
s:So/Example/BeamPositionDistribution = "Gaussian"
s:So/Example/BeamPositionCutoffShape  = "Ellipse"
d:So/Example/BeamPositionCutoffX      = 2. cm
d:So/Example/BeamPositionCutoffY      = 2. cm
d:So/Example/BeamPositionSpreadX      = 6. cm
d:So/Example/BeamPositionSpreadY      = 6. cm
s:So/Example/BeamAngularDistribution  = "Gaussian"
d:So/Example/BeamAngularCutoffX       = 90. deg
d:So/Example/BeamAngularCutoffY       = 90. deg
d:So/Example/BeamAngularSpreadX       = 0.0032 rad
d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Example/NumberOfHistoriesInRun   = 1000000 * Tf/histories/Value
	
s:Ge/BeamPosition/Parent="World"
s:Ge/BeamPosition/Type="Group"
d:Ge/BeamPosition/TransX=0.0 m 
d:Ge/BeamPosition/TransY=0.068 m
d:Ge/BeamPosition/TransZ= Ge/World/HLZ + 0.1 m
d:Ge/BeamPosition/RotX=180. deg
d:Ge/BeamPosition/RotY=0. deg
d:Ge/BeamPosition/RotZ=0. deg


#Scorer

##Scorer 1: CTV
s:Sc/DoseCTV/Quantity                  = "DoseToMedium"
s:Sc/DoseCTV/Component                 = "Patient"
s:Sc/DoseCTV/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/DoseCTV/OutputType                = "dicom"
#s:Sc/DoseCTV/OutputType                = "csv"
#sv:Sc/DoseCTV/OnlyIncludeIfInRTStructure = 1 "CTV_Zylinder" 
#sv:Sc/DoseCTV/Report                   =  2 "Sum" "CumulativeVolumeHistogram"
#i:Sc/DoseCTV/HistogramBins             = 100
#d:Sc/DoseCTV/HistogramMin              = 0. Gy
#d:Sc/DoseCTV/HistogramMax              = .000001 Gy



#Scorer 2: OAR1
#s:Sc/DoseOAR1/Quantity                  = "DoseToMedium"
#s:Sc/DoseOAR1/Component                 = "Patient"
#s:Sc/DoseOAR1/IfOutputFileAlreadyExists = "Overwrite"
#s:Sc/DoseOAR1/OutputType                = "csv"
#sv:Sc/DoseOAR1/OnlyIncludeIfInRTStructure = 1 "OAR1"   
#sv:Sc/DoseOAR1/Report                   = 2 "Sum" "CumulativeVolumeHistogram"
#i:Sc/DoseOAR1/HistogramBins             = 100
#d:Sc/DoseOAR1/HistogramMin              = 0. Gy
#d:Sc/DoseOAR1/HistogramMax              = .000001 Gy

#Scorer 3: OAR2
#s:Sc/DoseOAR2/Quantity                  = "DoseToMedium"
#s:Sc/DoseOAR2/Component                 = "Patient"
#s:Sc/DoseOAR2/IfOutputFileAlreadyExists = "Overwrite"
#s:Sc/DoseOAR2/OutputType                = "csv"
#sv:Sc/DoseOAR2/OnlyIncludeIfInRTStructure = 1 "OAR2"
#sv:Sc/DoseOAR2/Report                   = 2 "Sum" "CumulativeVolumeHistogram"
#i:Sc/DoseOAR2/HistogramBins             = 100
#d:Sc/DoseOAR2/HistogramMin              = 0. Gy
#d:Sc/DoseOAR2/HistogramMax              =  .000001 Gy

#Scorer 4: External
#s:Sc/DoseEx/Quantity                  = "DoseToMedium"
#s:Sc/DoseEx/Component                 = "Patient"
#s:Sc/DoseEx/IfOutputFileAlreadyExists = "Overwrite"
#s:Sc/DoseEx/OutputType                = "csv"
#sv:Sc/DoseEx/OnlyIncludeIfInRTStructure = 1 "External"
#sv:Sc/DoseEx/Report                   = 2 "Sum" "CumulativeVolumeHistogram"
#i:Sc/DoseEx/HistogramBins             = 100
#d:Sc/DoseEx/HistogramMin              = 0. Gy
#d:Sc/DoseEx/HistogramMax              = .000001 Gy



