#task 2 file for topas 

#DEFAULTS
b:Gr/Enable = "False"
#Ts/UseQT = "True"
#b:Ts/PauseBeforeSequence = "True"
#b:Ts/PauseBeforeQuit = "True"
i:Ts/Seed = 1
i:Ts/MaxInterruptedHistories = 1000000
i:Ts/ShowHistoryCountAtInterval = 20000 
i:Ts/NumberOfThreads = 0


#PHYSIC MODULS
#sv:Ph/Default/Modules = 1 "Transportation_Only"
sv:Ph/Default/Modules = 1 "g4em-standard_opt0"
d:Ph/Default/CutForAllParticles = 0.1 mm 
d:Ph/Default/EMRangeMin = 100. eV 
i:Ph/Default/EMBins = 77

#World 
s:Ge/World/Material    = "Vacuum"
d:Ge/World/HLX         = 1 m
d:Ge/World/HLY         = 1 m
d:Ge/World/HLZ         = 1 m


#loading DICOM patient 

includeFile = HUtoMaterialSchneider.txt
s:Ge/Patient/Parent   = "World"
#s:Ge/Patient/Material = "G4_WATER"
s:Ge/Patient/Type           = "TsDicomPatient"
s:Ge/Patient/DicomDirectory = "data/CT/DicomDaten"
#sv:Ge/Patient/DicomModalityTags = 1 "CT"



sv:Ge/Patient/ColorByRTStructNames = 4 "CTV_Zylinder" "OAR1" "OAR2" "External"
sv:Ge/Patient/ColorByRTStructColors = 4 "blue" "red" "red" "green"

#i:Ge/Patient/RestrictVoxelsXMin = 300
#i:Ge/Patient/RestrictVoxelsYMin = 300
#i:Ge/Patient/RestrictVoxelsXMax = 400
#i:Ge/Patient/RestrictVoxelsYMax = 400
#i:Ge/Patient/RestrictVoxelsZMin = 300
#i:Ge/Patient/RestrictVoxelsZMax = 400


#iv:Ge/Patient/ShowSpecificSlicesX = 1 -1
#iv:Ge/Patient/ShowSpecificSlicesY = 1 -1
#iv:Ge/Patient/ShowSpecificSlicesZ = 1 30



#Basic graphics for future projects
s:Gr/BasicViewA/Type             = "OpenGL"
i:Gr/BasicViewA/WindowSizeX      = 1024
i:Gr/BasicViewA/WindowSizeY      = 768
b:Gr/BasicViewA/IncludeAxes      = "True"
d:Gr/BasicViewA/Theta            = 55 deg
d:Gr/BasicViewA/Phi              = 20 deg
s:Gr/BasicViewA/Projection       = "Perspective"
d:Gr/BasicViewA/PerspectiveAngle = 30 deg
u:Gr/BasicViewA/Zoom             = 3

i:Gr/ShowOnlyOutlineIfVoxelCountExceeds = 500000000


#include Time featur for moving source
#s:Tf/Move/Function = "Linear cm"
#d:Tf/Move/Rate = 1  cm/ms
#d:Tf/Move/StartValue = 0. cm
#d:Tf/Move/RepetitionInterval = 5. ms

s:Tf/Move/Function = "Step"
dv:Tf/Move/Times = 4 2.5 5 7.5 10 ms
dv:Tf/Move/Values = 4 0 3 0 3 cm



s:Tf/Move2/Function = "Step"
dv:Tf/Move2/Times = 2 5 10 ms
dv:Tf/Move2/Values = 2 -2 2 cm

d:Tf/TimelineStart = 0. ms
d:Tf/TimelineEnd = 10. ms
i:Tf/NumberOfSequentialTimes = 10
i:Tf/Vebosity = 2


#Source
s:So/Example/Type                     = "Beam"
s:So/Example/Component                = "BeamPosition"
s:So/Example/BeamParticle             = "proton"
d:So/Example/BeamEnergy               =  150 MeV
u:So/Example/BeamEnergySpread         = 0.757504
s:So/Example/BeamPositionDistribution = "Gaussian"
s:So/Example/BeamPositionCutoffShape  = "Ellipse"
d:So/Example/BeamPositionCutoffX      = 1. cm
d:So/Example/BeamPositionCutoffY      = 1. cm
d:So/Example/BeamPositionSpreadX      = 3. cm
d:So/Example/BeamPositionSpreadY      = 3. cm
s:So/Example/BeamAngularDistribution  = "Gaussian"
d:So/Example/BeamAngularCutoffX       = 90. deg
d:So/Example/BeamAngularCutoffY       = 90. deg
d:So/Example/BeamAngularSpreadX       = 0.0032 rad
d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Example/NumberOfHistoriesInRun   = 100000

s:Ge/BeamPosition/Parent="World"
s:Ge/BeamPosition/Type="Group"
d:Ge/BeamPosition/TransX=0.0 m + Tf/Move2/value
d:Ge/BeamPosition/TransY=0.05 m + Tf/Move/value
d:Ge/BeamPosition/TransZ= Ge/World/HLZ + 0.1 m
d:Ge/BeamPosition/RotX=180. deg
d:Ge/BeamPosition/RotY=0. deg
d:Ge/BeamPosition/RotZ=0. deg


#Scorer

#Scorer 1: CTV
s:Sc/DoseCTV/Quantity                  = "DoseToMedium"
s:Sc/DoseCTV/Component                 = "Patient"
s:Sc/DoseCTV/IfOutputFileAlreadyExists = "Overwrite"
s:Sc/DoseCTV/OutputType                = "dicom"
#s:Sc/DoseCTV/OutputType                = "csv"
#sv:Sc/DoseCTV/OnlyIncludeIfInRTStructure = 1 "CTV_Zylinder" 
#sv:Sc/DoseCTV/Report                   =  2 "Sum" "CumulativeVolumeHistogram"
#i:Sc/DoseCTV/HistogramBins             = 100
#d:Sc/DoseCTV/HistogramMin              = 0. Gy
#d:Sc/DoseCTV/HistogramMax              = .000001 Gy



#Scorer 2: OAR1
#s:Sc/DoseOAR1/Quantity                  = "DoseToMedium"
#s:Sc/DoseOAR1/Component                 = "Patient"
#s:Sc/DoseOAR1/IfOutputFileAlreadyExists = "Overwrite"
#s:Sc/DoseOAR1/OutputType                = "csv"
#sv:Sc/DoseOAR1/OnlyIncludeIfInRTStructure = 1 "OAR1"   
#sv:Sc/DoseOAR1/Report                   = 2 "Sum" "CumulativeVolumeHistogram"
#i:Sc/DoseOAR1/HistogramBins             = 100
#d:Sc/DoseOAR1/HistogramMin              = 0. Gy
#d:Sc/DoseOAR1/HistogramMax              = .000001 Gy

#Scorer 3: OAR2
#s:Sc/DoseOAR2/Quantity                  = "DoseToMedium"
#s:Sc/DoseOAR2/Component                 = "Patient"
#s:Sc/DoseOAR2/IfOutputFileAlreadyExists = "Overwrite"
#s:Sc/DoseOAR2/OutputType                = "csv"
#sv:Sc/DoseOAR2/OnlyIncludeIfInRTStructure = 1 "OAR2"
#sv:Sc/DoseOAR2/Report                   = 2 "Sum" "CumulativeVolumeHistogram"
#i:Sc/DoseOAR2/HistogramBins             = 100
#d:Sc/DoseOAR2/HistogramMin              = 0. Gy
#d:Sc/DoseOAR2/HistogramMax              =  .000001 Gy

#Scorer 4: External
#s:Sc/DoseEx/Quantity                  = "DoseToMedium"
#s:Sc/DoseEx/Component                 = "Patient"
#s:Sc/DoseEx/IfOutputFileAlreadyExists = "Overwrite"
#s:Sc/DoseEx/OutputType                = "csv"
#sv:Sc/DoseEx/OnlyIncludeIfInRTStructure = 1 "External"
#sv:Sc/DoseEx/Report                   = 2 "Sum" "CumulativeVolumeHistogram"
#i:Sc/DoseEx/HistogramBins             = 100
#d:Sc/DoseEx/HistogramMin              = 0. Gy
#d:Sc/DoseEx/HistogramMax              = .000001 Gy



